//	Copyright 2013-, Quan Qing, Nanoelectronics for Biophysics Lab, Arizona State University
// Web: http://qinglab.physics.asu.edu
// Email: quan.qing@asu.edu, quan.qing@yahoo.com
//	
//	Redistribution and use in source and binary forms, with or without
//	modification, are permitted provided that the following conditions
//	are met:
//	
//	1. Redistributions of source code must retain the above copyright
//	   notice, this list of conditions and the following disclaimer.
//	2. Redistributions in binary form must reproduce the above copyright
//	  notice, this list of conditions and the following disclaimer in the
//	   documentation and/or other materials provided with the distribution.
//	
//	THIS SOFTWARE IS PROVIDED BY THE AUTHOR ``AS IS'' AND ANY EXPRESS OR
//	IMPLIED WARRANTIES, INCLUDING, BUT NOT LIMITED TO, THE IMPLIED WARRANTIES
//	OF MERCHANTABILITY AND FITNESS FOR A PARTICULAR PURPOSE ARE DISCLAIMED.
//	IN NO EVENT SHALL THE AUTHOR BE LIABLE FOR ANY DIRECT, INDIRECT,
//	INCIDENTAL, SPECIAL, EXEMPLARY, OR CONSEQUENTIAL DAMAGES (INCLUDING, BUT
//	NOT LIMITED TO, PROCUREMENT OF SUBSTITUTE GOODS OR SERVICES; LOSS OF USE,
//	DATA, OR PROFITS; OR BUSINESS INTERRUPTION) HOWEVER CAUSED AND ON ANY
//	THEORY OF LIABILITY, WHETHER IN CONTRACT, STRICT LIABILITY, OR TORT
//	(INCLUDING NEGLIGENCE OR OTHERWISE) ARISING IN ANY WAY OUT OF THE USE OF
//	THIS SOFTWARE, EVEN IF ADVISED OF THE POSSIBILITY OF SUCH DAMAGE.
#pragma TextEncoding = "MacRoman"		// For details execute DisplayHelpTopic "The TextEncoding Pragma"
#pragma rtGlobals=3		// Use modern global access method and strict wave access.
#pragma IgorVersion=7
#pragma ModuleName=ITC

#if exists("LIH_InitInterface")==3
#if defined(DEBUGONLY)
#define ITCDEBUG
#else		
#undef ITCDEBUG
#endif
#else
#define ITCDEBUG
#endif

#if defined(ITCDEBUG)
StrConstant ITCMenuStr="ITC(DEMO)"
Constant ITCDEMO=1
#else
StrConstant ITCMenuStr="ITC"
Constant ITCDEMO=0
#endif

Menu ITCMenuStr
	"About ITCPanel",/Q, ITCPanel#ITC_About()
	help={"About ITCPanel"}
	
	"Init ITCPanel",/Q, ITCPanel#ITC_Init()
	help={"Initialize ITCPanel"}
	
	"Shutdown ITCPanel",/Q,ITCPanel#ITC_Quit()
	help={"Shutdown ITCPanel"}
	
	"Plot trace record with histogram (slow)...",/Q,ITCPanel#ITC_Plot_TraceRecord()
	help={"Plot trace with specified record number"}
	
	"Kill Notebook Log...",/Q,ITCPanel#ITC_KillNoteBookLog()
	help={"Kill previous notebook logs"}
End

#include "itcpanel"
